---
API: 2.1
OpenSesame: 3.3.4
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Numerische Stoop Task"
set subject_parity even
set subject_nr 0
set start NumerischeStroopTask
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/juliu/OneDrive/Dokumente/PhD-Thesis/Teaching/Adaptive Control/Experiment/AdaptiveControl/OS_Experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define form_text_input Age
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Alter
	set form_question "Bitte geben Sie ihr Alter an:"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad Blank_Screen
	set duration 795
	set description "Präsentiert Stimuli"

define sketchpad Blankscreen
	set duration 995
	set description "Displays stimuli"

define sequence Block1
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run block always
	run Block_loop_1 always

define sequence Block_2_1
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run Block_Trigger_begin always
	run Update_Block always
	run Fortfahren always
	run Blankscreen always
	run ExpBlock always
	run Block_Trigger_end always
	run Ende_Block always
	run continue always

define inline_script Block_Trigger_begin
	set description "Executes Python code"
	___run__
	
	if eeg:
		#First a 0 trigger to reset ports
		
		try:
			io.DlPortWritePortUchar(port, 0)
		except:
			print('Failed to send zero trigger!')
		self.sleep(2)
	
		#start recording
		try: 
			io.DlPortWritePortUchar(port, 254)
			print('Recording started')
		except:
			print('Recording not started')
		self.sleep(2)
		io.DlPortWritePortUchar(port, 0)
		
		#send trial onset trigger
	
		trigger = var.Block #because this sequence is not booked yet
		try:
			io.DlPortWritePortUchar(port, trigger)
			print("Trigger number", trigger, "TRIAL_BLOCK_TRIGGER")
		except:
			print('Failed to send trigger!')
		self.sleep(2)
		io.DlPortWritePortUchar(port, 0)
	__end__
	set _prepare ""

define inline_script Block_Trigger_end
	set description "Executes Python code"
	___run__
	
	if eeg:
		#First a 0 trigger to reset ports
		
		try:
			io.DlPortWritePortUchar(port, 0)
		except:
			print('Failed to send zero trigger!')
		self.sleep(2)
	
		#end recording
		try: 
			io.DlPortWritePortUchar(port, 255)
			print('Recording ended')
		except:
			print('Recording not ended')
		self.sleep(2)
		io.DlPortWritePortUchar(port, 0)
		
		#send trial onset trigger
	
		trigger = 100 + var.Block #because this sequence is not booked yet
		try:
			io.DlPortWritePortUchar(port, trigger)
			print("Trigger number", trigger, "TRIAL_BLOCK_TRIGGER_end")
		except:
			print('Failed to send trigger!')
		self.sleep(2)
		io.DlPortWritePortUchar(port, 0)
	__end__
	set _prepare ""

define loop Block_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 32
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response right
	setcycle 0 number_1 1
	setcycle 0 number_2 2
	setcycle 0 site_1 -300
	setcycle 0 size_1 40
	setcycle 0 item diagnostic
	setcycle 1 correct_response left
	setcycle 1 number_1 1
	setcycle 1 number_2 2
	setcycle 1 site_1 300
	setcycle 1 size_1 40
	setcycle 1 item diagnostic
	setcycle 2 correct_response right
	setcycle 2 number_1 1
	setcycle 2 number_2 2
	setcycle 2 site_1 -300
	setcycle 2 size_1 60
	setcycle 2 item diagnostic
	setcycle 3 correct_response left
	setcycle 3 number_1 1
	setcycle 3 number_2 2
	setcycle 3 site_1 300
	setcycle 3 size_1 60
	setcycle 3 item diagnostic
	setcycle 4 correct_response right
	setcycle 4 number_1 3
	setcycle 4 number_2 4
	setcycle 4 site_1 -300
	setcycle 4 size_1 40
	setcycle 4 item inducer
	setcycle 5 correct_response left
	setcycle 5 number_1 3
	setcycle 5 number_2 4
	setcycle 5 site_1 300
	setcycle 5 size_1 40
	setcycle 5 item inducer
	setcycle 6 correct_response right
	setcycle 6 number_1 3
	setcycle 6 number_2 4
	setcycle 6 site_1 -300
	setcycle 6 size_1 40
	setcycle 6 item inducer
	setcycle 7 correct_response left
	setcycle 7 number_1 3
	setcycle 7 number_2 4
	setcycle 7 site_1 300
	setcycle 7 size_1 60
	setcycle 7 item inducer
	setcycle 8 correct_response right
	setcycle 8 number_1 6
	setcycle 8 number_2 7
	setcycle 8 site_1 -300
	setcycle 8 size_1 40
	setcycle 8 item diagnostic
	setcycle 9 correct_response left
	setcycle 9 number_1 6
	setcycle 9 number_2 7
	setcycle 9 site_1 300
	setcycle 9 size_1 40
	setcycle 9 item diagnostic
	setcycle 10 correct_response right
	setcycle 10 number_1 6
	setcycle 10 number_2 7
	setcycle 10 site_1 -300
	setcycle 10 size_1 60
	setcycle 10 item diagnostic
	setcycle 11 correct_response left
	setcycle 11 number_1 6
	setcycle 11 number_2 7
	setcycle 11 site_1 300
	setcycle 11 size_1 60
	setcycle 11 item diagnostic
	setcycle 12 correct_response right
	setcycle 12 number_1 8
	setcycle 12 number_2 9
	setcycle 12 site_1 -300
	setcycle 12 size_1 40
	setcycle 12 item inducer
	setcycle 13 correct_response left
	setcycle 13 number_1 8
	setcycle 13 number_2 9
	setcycle 13 site_1 300
	setcycle 13 size_1 40
	setcycle 13 item inducer
	setcycle 14 correct_response right
	setcycle 14 number_1 8
	setcycle 14 number_2 9
	setcycle 14 site_1 -300
	setcycle 14 size_1 60
	setcycle 14 item inducer
	setcycle 15 correct_response left
	setcycle 15 number_1 8
	setcycle 15 number_2 9
	setcycle 15 site_1 300
	setcycle 15 size_1 60
	setcycle 15 item inducer
	setcycle 16 correct_response right
	setcycle 16 number_1 1
	setcycle 16 number_2 3
	setcycle 16 site_1 -300
	setcycle 16 size_1 40
	setcycle 16 item inducer
	setcycle 17 correct_response left
	setcycle 17 number_1 1
	setcycle 17 number_2 3
	setcycle 17 site_1 300
	setcycle 17 size_1 40
	setcycle 17 item inducer
	setcycle 18 correct_response right
	setcycle 18 number_1 1
	setcycle 18 number_2 3
	setcycle 18 site_1 -300
	setcycle 18 size_1 60
	setcycle 18 item inducer
	setcycle 19 correct_response left
	setcycle 19 number_1 1
	setcycle 19 number_2 3
	setcycle 19 site_1 300
	setcycle 19 size_1 60
	setcycle 19 item inducer
	setcycle 20 correct_response right
	setcycle 20 number_1 2
	setcycle 20 number_2 4
	setcycle 20 site_1 -300
	setcycle 20 size_1 40
	setcycle 20 item diagnostic
	setcycle 21 correct_response left
	setcycle 21 number_1 2
	setcycle 21 number_2 4
	setcycle 21 site_1 300
	setcycle 21 size_1 40
	setcycle 21 item diagnostic
	setcycle 22 correct_response right
	setcycle 22 number_1 2
	setcycle 22 number_2 4
	setcycle 22 site_1 -300
	setcycle 22 size_1 60
	setcycle 22 item diagnostic
	setcycle 23 correct_response left
	setcycle 23 number_1 2
	setcycle 23 number_2 4
	setcycle 23 site_1 300
	setcycle 23 size_1 60
	setcycle 23 item diagnostic
	setcycle 24 correct_response right
	setcycle 24 number_1 6
	setcycle 24 number_2 8
	setcycle 24 site_1 -300
	setcycle 24 size_1 40
	setcycle 24 item inducer
	setcycle 25 correct_response left
	setcycle 25 number_1 6
	setcycle 25 number_2 8
	setcycle 25 site_1 300
	setcycle 25 size_1 40
	setcycle 25 item inducer
	setcycle 26 correct_response right
	setcycle 26 number_1 6
	setcycle 26 number_2 8
	setcycle 26 site_1 -300
	setcycle 26 size_1 60
	setcycle 26 item inducer
	setcycle 27 correct_response left
	setcycle 27 number_1 6
	setcycle 27 number_2 8
	setcycle 27 site_1 300
	setcycle 27 size_1 60
	setcycle 27 item inducer
	setcycle 28 correct_response right
	setcycle 28 number_1 7
	setcycle 28 number_2 9
	setcycle 28 site_1 -300
	setcycle 28 size_1 40
	setcycle 28 item diagnostic
	setcycle 29 correct_response left
	setcycle 29 number_1 7
	setcycle 29 number_2 9
	setcycle 29 site_1 300
	setcycle 29 size_1 40
	setcycle 29 item diagnostic
	setcycle 30 correct_response right
	setcycle 30 number_1 7
	setcycle 30 number_2 9
	setcycle 30 site_1 -300
	setcycle 30 size_1 60
	setcycle 30 item diagnostic
	setcycle 31 correct_response left
	setcycle 31 number_1 7
	setcycle 31 number_2 9
	setcycle 31 site_1 300
	setcycle 31 size_1 60
	setcycle 31 item diagnostic
	run Pratice

define sketchpad Correct_answer
	set duration 995
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#005500" font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text=Richtig x=0 y=0 z_index=0

define sketchpad Ende_Block
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Sie haben das Ende des Blocks Nummer [Block] erreicht. Wenn sie bereit sind mit dem Experiment fortzufahren, informieren Sie bitte den/die Experimentator/in." x=0 y=0 z_index=0

define sketchpad Ende_Experiment
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Sie haben das Ende des Experiments erreicht! Bitte informieren sie den/die Experimentator/in. <br /><br />Vielen Dank für ihre Teilnahme!" x=0 y=0 z_index=0

define sketchpad Ende_Practice
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Sie haben das Ende des Übungsblocks erreicht. Wenn sie bereit sind mit dem Experiment fortzufahren, informieren Sie bitte den/die Experimentator/in." x=0 y=0 z_index=0

define loop ExpBlock
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 56
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	setcycle 3 empty_column ""
	setcycle 4 empty_column ""
	setcycle 5 empty_column ""
	setcycle 6 empty_column ""
	setcycle 7 empty_column ""
	setcycle 8 empty_column ""
	setcycle 9 empty_column ""
	setcycle 10 empty_column ""
	setcycle 11 empty_column ""
	setcycle 12 empty_column ""
	setcycle 13 empty_column ""
	setcycle 14 empty_column ""
	setcycle 15 empty_column ""
	setcycle 16 empty_column ""
	setcycle 17 empty_column ""
	setcycle 18 empty_column ""
	setcycle 19 empty_column ""
	setcycle 20 empty_column ""
	setcycle 21 empty_column ""
	setcycle 22 empty_column ""
	setcycle 23 empty_column ""
	setcycle 24 empty_column ""
	setcycle 25 empty_column ""
	setcycle 26 empty_column ""
	setcycle 27 empty_column ""
	setcycle 28 empty_column ""
	setcycle 29 empty_column ""
	setcycle 30 empty_column ""
	setcycle 31 empty_column ""
	setcycle 32 empty_column ""
	setcycle 33 empty_column ""
	setcycle 34 empty_column ""
	setcycle 35 empty_column ""
	setcycle 36 empty_column ""
	setcycle 37 empty_column ""
	setcycle 38 empty_column ""
	setcycle 39 empty_column ""
	setcycle 40 empty_column ""
	setcycle 41 empty_column ""
	setcycle 42 empty_column ""
	setcycle 43 empty_column ""
	setcycle 44 empty_column ""
	setcycle 45 empty_column ""
	setcycle 46 empty_column ""
	setcycle 47 empty_column ""
	setcycle 48 empty_column ""
	setcycle 49 empty_column ""
	setcycle 50 empty_column ""
	setcycle 51 empty_column ""
	setcycle 52 empty_column ""
	setcycle 53 empty_column ""
	setcycle 54 empty_column ""
	setcycle 55 empty_column ""
	run Experiment_1

define form_multiple_choice Exp_group
	set timeout infinite
	set spacing 10
	set question "Bitte tragen Sie die Gruppe ein:"
	__options__
	PD
	W/O PD y
	W/O PD o
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "(Für den/die Experimentator_in)"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sequence Experiment_1
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run Timing_fixationdot_1 always
	run fixation_dot always
	run StimOnset_Trigger always
	run Zahlenkombination always
	run Keyboard_response always
	run Response_Trigger always
	run Blank_Screen always
	run Logger_Experiment always

define inline_script Forms
	set description "Executes Python code"
	___run__
	form = Form(cols=[1,1], rows=[1,1,1,1,1])
	title = Label(
	    text=u'Bitte machen Sie folgende Angaben'
	)
	question1 = Label(text=u'Gruppe (nur für den/die Experimentatorin)', center=False)
	question2 = Label(text=u'Geschlecht', center=False)
	question3 = Label(text=u'Alter', center=False)
	ratingScale1 = RatingScale(
	    var=u'Exp_group',
	    nodes=[u'PD', u"CY", u'CO', u'Pilot']
	)
	ratingScale2 = RatingScale(
	    var=u'Gender',
	    nodes=[u'männlich', u"weiblich", u'divers']
	)
	
	
	text_input = TextInput(
	         frame=True, center=False, stub=u'…',
	        return_accepts=True, var=u'Age'
	)
	nextButton = Button(text=u'Next')
	form.set_widget(title, (0, 0), colspan=2)
	form.set_widget(question1, (0, 1))
	form.set_widget(question2, (0, 2))
	form.set_widget(question3, (0, 3))
	form.set_widget(ratingScale1, (1, 1))
	form.set_widget(ratingScale2, (1, 2))
	form.set_widget(text_input, (1, 3))
	form.set_widget(nextButton, (0, 4), colspan=2)
	form._exec()
	__end__
	set _prepare ""

define sketchpad Fortfahren
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Um mit dem Block Nummer [Block] von 8 des Experiments fortzufahren, drücken Sie bitte die Leertaste." x=0 y=0 z_index=0

define form_multiple_choice Gender
	set timeout infinite
	set spacing 10
	set question "Bitte geben Sie ihr Geschlecht an:"
	__options__
	Mann
	Frau
	Divers
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title Geschlecht
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define keyboard_response Keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Sammelt Tastaturantworten"
	set correct_response "[correct_response]"
	set allowed_responses "left; right"

define logger Logger_Experiment
	set description "Registriert experimentelle Daten"
	set auto_log no
	log SOA
	log correct_Keyboard_response
	log count_Keyboard_response
	log number_1
	log number_2
	log response_Keyboard_response
	log response_time_Keyboard_response
	log trial
	log total_trial
	log Block
	log Correct
	log Congruency
	log Analysis_type
	log Trl_type
	log Age
	log Gender
	log Exp_group
	log timeStamp

define sequence NumerischeStroopTask
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run Forms always
	run Set_ExpVars always
	run welcome_1 always
	run instruction_response always
	run welcome_2 always
	run instruction_response always
	run welcome_3 always
	run instruction_response always
	run welcome_4 always
	run instruction_response always
	run welcome_5 always
	run continue always
	run Practice always
	run Ende_Practice always
	run continue always
	run Task always
	run UpdateExpList always
	run Ende_Experiment always
	run continue always

define loop Practice
	set source table
	set repeat 0
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Block1

define sequence Pratice
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run Timing_fixationdot always
	run fixation_dot always
	run Zahlenkombination always
	run Keyboard_response always
	run incorrect_answer "[correct]=0"
	run Correct_answer "[correct]=1"
	run Blank_Screen always
	run Logger_Experiment always

define inline_script Response_Trigger
	set description "Executes Python code"
	___run__
	if eeg:
		
		if var.correct_response == var.response_Keyboard_response:
			# if we have a correct response
			trigger = Block_base + 120 + var.Trigger_1
		else:
			# if we have a incorrect response
			trigger = Block_base + 130 + var.Trigger_1
	
		try:
			io.DlPortWritePortUchar(port, trigger) 
			print("Trigger number", trigger, "Response")
			
		except:
			print('Failed to send trigger!')
		self.sleep(2)
		io.DlPortWritePortUchar(port, 0)
	__end__
	set _prepare ""

define inline_script Set_ExpVars
	set description "Executes Python code"
	___run__
	import random
	import pandas as pd
	import numpy as np
	from time import time
	from datamatrix import convert
	import os
	from datetime import datetime
	
	# datetime object containing current date and time as an identifier for the dataset
	var.timeStamp = datetime.now()
	
	
	# Code the reponse variables of the form more readible:
	if var.Gender == 0:
		var.Gender = 'male'
	elif var.Gender == 1:
		var.Gender = 'female'
	elif var.Gender == 2:
		var.Gender = 'diverse'
		
	if var.Exp_group == 0:
		var.Exp_group = 'PD'
	elif var.Exp_group == 1:
		var.Exp_group = 'CY'
	elif var.Exp_group == 2:
		var.Exp_group = 'CO'
	elif var.Exp_group == 3:
		var.Exp_group = 'Pilot'
	
	# Next load experiment list
	
	list_dir =  var.experiment_path + r'/Lists/'
	#check if the list in question has already been used - if so, throw an Error
	list_name = 'AdapConSeeds_' + var.Exp_group + '.csv'
	SeedList = pd.read_csv(list_dir + list_name)
	
	for part in range(len(SeedList.Used)):
	    if SeedList.Used[part] != 'Yes':
	        var.subject_nr = part
	        print('Particpant number is ', var.subject_nr)
	        break
	
	
	
	#close and remove original log - courtesy of Jelmer Borst for the logging code
	ori_log = var.logfile
	log.close()
	os.remove(ori_log)
	
	#check data dir
	data_dir =  var.experiment_path + '/data/'
	if not os.path.exists(data_dir):
		os.makedirs(data_dir)
		
	data_file = data_dir + 'AdapCon_' + var.Exp_group + '_' + str(var.subject_nr) + '.csv'
	cnt = 0
	
	#don't overwrite ever
	while os.path.exists(data_file):
		cnt += 1
		data_file = data_dir + 'AdapCon_' + var.Exp_group + '_' + str(var.subject_nr) + '_v' + str(cnt) + '.csv'
	log.open(data_file)
	
	
	# Load the list 
	listName = var.experiment_path + '\\Lists\\' + 'AdapCon_' + var.Exp_group + 'List_' + str(var.subject_nr) + '.csv'
	print('The list that was selected is: ',listName)
	blockframe = pd.read_csv(listName)
	
	# Because OS needs a dataMatrix for the items we need to make some changes to import it here
	blockframe = blockframe.reset_index(drop=True)
	blockframe['Item1'] = None
	blockframe['Item2'] = None
	
	# Hre we convert the python list item to two integers
	for i in range(len(blockframe)):
	    
	    blockframe.Item1[i]=blockframe.Item[i][1]
	    blockframe.Item2[i]=blockframe.Item[i][4]
	blockframe = blockframe.drop(['Item','Unnamed: 0'], axis = 1)
	dm = convert.from_pandas(blockframe)
	
	print('List has been loaded from file.')
	# Set the variables for our Experiment
	eeg = 0 # change this variable to one if you want to send EEG triggers
	
	var.size_small = 40
	var.size_large = 60
	
	var.site_left  = -300
	var.site_right = 300
	
	var.total_trial  = 0 # total number o trials
	
	
	if eeg:
		
		try:
			from ctypes import windll
			io = windll.inpoutx64 # requires inpoutx64.dll !!! which must be saved in the /windows/system32 folder
			port = 16344 # port adress still incorrect
			print('The parallel port opened')
		except:
			print('The parallel port couldn\'t be opened')
	__end__
	set _prepare ""

define inline_script StimOnset_Trigger
	set description "Executes Python code"
	___run__
	if eeg:
		trigger = Block_base + 20 + var.Trigger_1
	
		try:
			io.DlPortWritePortUchar(port, trigger) 
			print("Trigger number", trigger, "STIM ONSET")
			
		except:
			print('Failed to send trigger!')
		self.sleep(2)
		io.DlPortWritePortUchar(port, 0)
	__end__
	set _prepare ""

define loop Task
	set source table
	set repeat 1
	set order sequential
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Block 1
	setcycle 1 Block 2
	setcycle 2 Block 3
	setcycle 3 Block 4
	setcycle 4 Block 5
	setcycle 5 Block 6
	setcycle 6 Block 7
	setcycle 7 Block 8
	run Block_2_1

define inline_script Timing_fixationdot
	set description "Führt Python Code aus"
	set _run ""
	___prepare__
	
	
	var.SOA = random.randint(300,600)-5
	
	print(var.SOA)
	
	
	if var.size_1 == 40: 
	    var.size_2 = 60
	else: 
	    var.size_2 = 40
	print (var.size_2)
	
	
	if var.site_1 == 300:
	    var.site_2= -300
	else: 
	    var.site_2 = 300
	print (var.site_2)
	__end__

define inline_script Timing_fixationdot_1
	set description "Führt Python Code aus"
	set _run ""
	___prepare__
	# Item values
	
	# Update trial informatiomn
	var.trial += 1
	var.total_trial += 1
	
	var.SOA = random.randint(300,600)-5
	print(var.SOA)
	
	
	var.number_1 =  var.Item1
	var.number_2 =  var.Item2
	
	
	# To indicate which Analysis_type is reflected in the trial we specify the trigger base as multiples of 20
	if var.Analysis_type == 'MI': # Items in the majority incongruent Block
		Block_base = 0
	elif var.Analysis_type == 'MC': #Items in the majority congruent Block
		Block_base = 20
	elif var.Analysis_type == 'main_incon': # IWPC Items in the majority incongruent condition
		Block_base = 40
	elif var.Analysis_type == 'main_con': # IWPC Items in the majority congruent condition
		Block_base = 60
	
	
	if var.Item1 > var.Item2:
		if var.Correct == 'Left':
			var.correct_response = 'left'
			var.site_1 = var.site_left
			var.site_2 = var.site_right
		else:
			var.correct_response = 'right'
			var.site_1 = var.site_right
			var.site_2 = var.site_left
		if var.Congruency == 'congruent':
			var.size_1 = var.size_large
			var.size_2 = var.size_small
		else:
			var.size_1 = var.size_small
			var.size_2 = var.size_large
	else:
	    if var.Correct == 'Left':
	        var.site_1 = var.site_right
	        var.site_2 = var.site_left
	    else:
	        var.site_1 = var.site_left
	        var.site_2 = var.site_right
	    if var.Congruency == 'congruent':
	        var.size_1 = var.size_small
	        var.size_2 = var.size_large
	    else:
	        var.size_1 = var.size_large
	        var.size_2 = var.size_small    
	if var.Correct == 'Right':
		var.correct_response = 'right'
	else:
		var.correct_response = 'left'
	
	# define Trigger variable
	
	if var.Trl_type == 'Inducer':
		if var.Congruency == 'incongruent':
			var.Trigger_1 = 1
		else:
			var.Trigger_1 = 2
	if var.Trl_type == 'Diagnostic':
		if var.Congruency == 'incongruent':
			var.Trigger_1 = 3
		else:
			var.Trigger_1 = 4
	# send trigger for fixation onset, just in case
	if eeg:
		trigger = 200 + var.Trigger_1
	
		try:
			io.DlPortWritePortUchar(port, trigger) 
			print("Trigger number", trigger, "Fixation ONSET")
			
		except:
			print('Failed to send trigger!')
		self.sleep(2)
		io.DlPortWritePortUchar(port, 0)
	__end__

define inline_script UpdateExpList
	set description "Executes Python code"
	___run__
	
	# Call the List file again now that the experiment is over
	list_dir =  var.experiment_path + '\\Lists\\'
	list_name = 'AdapConSeeds_' + var.Exp_group + '.csv'
	
	SeedList = pd.read_csv(list_dir + list_name)
	
	# Change the list we just used
	SeedList.Used[var.subject_nr] = 'Yes'
	# Update the file so for the next task we can select the next list
	SeedList.to_csv(list_dir + list_name, header=True, index=False)
	__end__
	set _prepare ""

define inline_script Update_Block
	set description "Executes Python code"
	___run__
	var.block = var.Block
	var.trial = 0
	# specify the block list
	items['ExpBlock'].dm = dm.Block == var.block
	print('Until the Update_Block section here everything is fine')
	__end__
	set _prepare ""

define sketchpad Zahlenkombination
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size="[size_1]" html=yes show_if=always text="[number_1]" x="[site_1]" y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size="[size_2]" html=yes show_if=always text="[number_2]" x="[site_2]" y=0 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define inline_script block
	set description "Executes Python code"
	set _run "var.Block = 'practice'"
	set _prepare ""

define keyboard_response continue
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses c

define sketchpad fixation_dot
	set duration "[SOA]"
	set description "Präsentiert Stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad incorrect_answer
	set duration 995
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text=Falsch x=0 y=0 z_index=0

define keyboard_response instruction_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"

define form_base new_form_base
	set timeout infinite
	set spacing 10
	set rows "2;2"
	set only_render no
	set margins "50;50;50;50"
	set description "A generic form plug-in"
	set cols "2;2"
	set _theme gray


define sketchpad welcome_1
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Willkommen bei diesem Experiment!<br />Im Folgenden wollen wir noch kurz die bevorstehende Aufgabe erklären.<br />" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="(Um Fortzufahren drücken sie bitte die Leertaste)" x=0 y=352 z_index=0

define sketchpad welcome_2
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Ihre Aufgabe wird es sein, die numerisch größere Zahl per Tastendruck zu identifizieren.<br /><br /><br />Seien sie bei dieser Aufgabe so genau und schnell wie möglich." x=32 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="(Um Fortzufahren drücken sie bitte die Leertaste)" x=0 y=352 z_index=0
	draw line color=black penwidth=7 show_if=always x1=-416 x2=-224 y1=-64 y2=-64 z_index=0

define sketchpad welcome_3
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Wenn die größere Ziffer auf der linken Bildschirmseite ist, drücken sie bitte die linke Pfeiltaste. <br /><br /><br />Wenn die größere Ziffer auf der rechten Bildschirmseite ist, drücken sie bitte die rechte Pfeiltaste." x=2 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="(Um Fortzufahren drücken sie bitte die Leertaste)" x=0 y=352 z_index=0

define sketchpad welcome_4
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Beispiele: <br />" x=-320 y=-288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text=3 x=-384 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text=6 x=-256 y=-224 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Die 6 ist die numerisch größere Zahl und steht auf der rechten Seite.<br />Die richtige Taste ist die  rechte Pfeiltaste." x=-64 y=-256 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=black fill=1 penwidth=1 show_if=always x1=-191 x2=-95 y1=-229 y2=-229 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text=3 x=-256 y=32 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text=6 x=-416 y=0 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=black fill=1 penwidth=1 show_if=always x1=-192 x2=-96 y1=32 y2=32 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Linke Pfeiltaste" x=-64 y=0 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text=3 x=-416 y=96 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text="3<br />" x=-288 y=192 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="6<br />" x=-256 y=96 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="6<br />" x=-416 y=192 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=black fill=1 penwidth=1 show_if=always x1=-192 x2=-96 y1=128 y2=128 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=black fill=1 penwidth=1 show_if=always x1=-192 x2=-96 y1=224 y2=224 z_index=0
	draw rect color=black fill=0 h=64 penwidth=3 show_if=always w=192 x=-416 y=0 z_index=0
	draw rect color=black fill=0 h=64 penwidth=3 show_if=always w=192 x=-416 y=96 z_index=0
	draw rect color=black fill=0 h=64 penwidth=3 show_if=always w=192 x=-416 y=192 z_index=0
	draw rect color=black fill=0 h=64 penwidth=3 show_if=always w=192 x=-416 y=-256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Rechte Pfeiltaste" x=155 y=127 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Linke Pfeiltaste<br />" x=129 y=246 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="(Um Fortzufahren drücken sie bitte die Leertaste)<br />" x=0 y=384 z_index=0

define sketchpad welcome_5
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="Sie werden zunächst einige Versuche zur Übung durchführen bei denen Sie eine  Rückmeldung bekommen.<br /><br />Im Anschluss erfolgt das Experiment. Für die Dauer des Experiments werden sie keine Rückmeldung für ihre Antwort erhalten." x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="(Um zu Beginnen drücken sie bitte die Leertaste)" x=0 y=352 z_index=0

